OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0-beta)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "channel 30" => #1
  Channel List = channel 30
  Action = Select
  Channel Matching Method = Smart
Data=#1 -> Signal display "alpha power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Temporal Filter => #3
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 4
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #7
#3 -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #11
#3 -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #15
Data=#15 -> Signal display "alpha power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 12
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #20
Input - A=#7, Input - B=#11, Input - C=#15, Input - D=#20 -> Simple DSP => #21
  Equation = (C/(A+B+C+D))-0.25
-> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> Button VRPN Server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_01
Data=#21 -> Signal display "sign change"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#21 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream1
  Stream type = EEG
Input stream=#21 -> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false

GDF file reader
  Filename = C:/Program Files/openvibe-3.0.0-beta-64bit/share/openvibe/scenarios/signals/real-hand-movements.gdf
  Samples per buffer = 32
  Subtract physical minimum = false

Button VRPN Client
  Peripheral name = openvibe-vrpn@localhost
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_01
-> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_Label_00
  Cue Image 1 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
